---
API: 3
OpenSesame: 4.0.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "SlimStampen example"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_screen 1
set psychopy_monitor testMonitor
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "D:\\RUG\\Term 3\\ScientificVisualization\\user-modelling-project-apples-2\\experiment"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#FFFFFF"

define sketchpad begin_experiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Now the experiment begins!<br /><br /><br />" x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Press Enter to start the experiment." x=0 y=96 z_index=0

define loop block1
	set source table
	set repeat 1000
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[block1_time_up] = 1"
	setcycle 0 ignore_this_variable 1
	run trial_sequence

define loop block2
	set source table
	set repeat 1000
	set order random
	set description "Voert herhaaldelijk een ander item uit"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[time_up] = 1"
	setcycle 0 ignore_this_variable ""
	run trial_sequence2

define inline_script block2_setup
	set description "Executes Python code"
	___run__
	# Start the clock
	var.session_start_time = clock.time()
	
	# Session will run until time_up == True
	var.time_up = False
	
	# Keep track of trial number
	#var.trial_num = 1
	
	# Settings
	var.session_duration = 30000
	var.feedback_duration = 1500
	var.inter_trial_interval = 400
	
	# experiment settings
	# this is overwritten later
	var.initial_time = 15000 # time the participant is given for a word in ms
	var.interval = 50 # time for each frame in ms
	var.timebar = True
	__end__
	set _prepare ""

define sketchpad break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="You are allowed to take a short break. <br />Please press any key to continue with the experiment." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run slimstampen_setup always
	run instructions always
	run practice_trial True
	run practice_loop True
	run learning_session_setup always
	run begin_experiment True
	run block1 True
	run save_firstblock True
	run break True
	run new_model True
	run block2 True
	run save_secondblock always
	run finito True

define sketchpad finito
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Thank you for participating!<br /><br />Please press any key to end the experiment." x=0 y=0 z_index=0

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Welcome!<br /><br />You will find Swahili words which need to be translated to English.<br /><br />There are trials were the translation is shown, here you can press Enter when you have memorized the translation.<br /><br />For the other trials: please enter the translation of the word and then press <b>Enter</b>.<br /><br />Then if your translation was correct, it will appear in green:<br /><br /><br /><br />Otherwise in red, with the correct translation beneath it:" x=0 y=0 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="translation<br />" x=-32 y=224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="" x=-96 y=256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="correct translation<br />" x=-32 y=256 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="" x=-64 y=256 z_index=0
	draw textline center=1 color=green font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text=translation x=-32 y=96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Press Enter to continue." x=320 y=352 z_index=0

define inline_script learning_session_setup
	set description "Executes Python code"
	___run__
	# Start the clock
	var.session_start_time = clock.time()
	
	# Session will run until time_up == True
	var.block1_time_up = False
	var.time_up = False
	
	# Keep track of trial number
	var.trial_num = 1
	
	# Settings
	var.session_duration = 600000
	var.feedback_duration = 1500
	var.inter_trial_interval = 800
	
	# experiment settings
	# this is overwritten later
	var.initial_time = 15000 # time the participant is given for a word in ms
	var.interval = 50 # time for each frame in ms
	var.timebar = True
	__end__
	set _prepare ""

define inline_script new_1_inline_script
	set description "Voert Python-code uit"
	___run__
	
	
	# Get next fact from the model
	#next_fact, new = m.get_next_fact(current_time = trial_start_time)
	#prompt = next_fact.question
	#answer = next_fact.answer
	
	
	# Show prompt
	my_canvas = Canvas()
	
	# show words
	my_canvas.text(prompt, font_size = 30)
	if new:
		my_canvas.text(answer, y = 50, font_size = 25)
		my_canvas.text('Press Enter when you got it!', y = 300, x = 300, font_size = 20)
		
	# show canvas
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	if not new:
		timing = clock.time() - trial_start_time
		#while True:
		while 15000 >= timing:
			key, time = my_keyboard.get_key(timeout=var.interval)
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
		
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(prompt, font_size = 30)
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
			timing = clock.time() - trial_start_time
	
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
	
	else:
		while True:
			key, time = my_keyboard.get_key()
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
		
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(prompt, font_size = 30)
			my_canvas.text(answer, y = 50, font_size = 25)
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
			timing = clock.time() - trial_start_time
			#my_canvas.text(timing, y = 200) debugging 
			#my_canvas.text(var.initial_time, y = 300) for debug
		
					
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
			#timing = clock.time() - trial_start_time
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Show feedback
	if not new:
		feedback_color = "green" if correct else "red"
		if var.initial_time < timing:
			my_canvas.text("time has run out", y = 200, color = "red", font_size = 25)
		else:
			my_canvas.text(keyboard_response, y = 100, color = feedback_color, font_size = 25)
		if not correct:
			my_canvas.text(answer, y = 150, font_size = 25)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(1500)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(800)
	__end__
	set _prepare ""

define loop new_1_loop
	set source table
	set repeat 3
	set order random
	set description "Voert herhaaldelijk een ander item uit"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 ignore_this_variable ""
	setcycle 0 new_column_2 ""
	run new_1_sequence

define sequence new_1_sequence
	set flush_keyboard yes
	set description "Voert een aantal items achter elkaar uit"
	run new_1_inline_script True

define inline_script new_model
	set description "Executes Python code"
	___run__
	#import pandas as pd
	
	m = SpacingModel()
	
	new_words = second_set
	
	for i, r in new_words.iterrows():
		m.add_fact(Fact(i, r["swahili"], r["english"]))
		
	
	# # Add some study facts to the model (you could also read them from a CSV file)
	# facts = [Fact(1, "hello", "bonjour"),
	# 		Fact(2, "dog", "chien"),
	# 		Fact(3, "cat", "chat"),
	# 		Fact(4, "computer", "ordinateur"),
	# 		Fact(5, "house", "maison"),
	# 		Fact(6, "car", "voiture"),
	# 		Fact(7, "fish", "poisson"),
	# 		Fact(8, "bottle", "bouteille")]
	
	# for fact in facts:
	# 	m.add_fact(fact)
	__end__
	___prepare__
	from __future__ import division
	import math
	import pandas as pd
	from collections import namedtuple
	
	
	# Fact = namedtuple("Fact", "fact_id, question, answer")
	# Response = namedtuple("Response", "fact, start_time, rt, correct, test")
	# Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	class SpacingModel(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """
	        # Calculate all fact activations in the near future
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	        # Prevent an immediate repetition of the same fact
	        if len(seen_facts) > 2:
	            last_response = self.responses[-1]
	            seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	        # Reinforce the weakest fact with an activation below the threshold
	        seen_facts_below_threshold = [(f, a) for (f, a) in seen_facts if a < self.FORGET_THRESHOLD]
	        if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	            weakest_fact = min(seen_facts, key = lambda t: t[1])
	            return((weakest_fact[0], False))
	
	        # If none of the previously seen facts has an activation below the threshold, return a new fact
	        return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 3:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        reading_time = self.get_reading_time(response.fact.question)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	        reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        word_count = len(text.split())
	
	        if word_count > 1:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        def calc_rof(row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        dat["alpha"] = dat.apply(calc_rof, axis = 1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	__end__

define inline_script no_time_bar_even
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Get next fact from the model
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	prompt = next_fact.question
	answer = next_fact.answer
	
	activation = m.calculate_activation(trial_start_time, next_fact)
	reading_time = m.get_reading_time(prompt)
	reaction_time =	m.estimate_reaction_time_from_activation(activation, reading_time)
	
	# simple calculation for timebar
	var.initial_time = 15000
	
	# Show prompt
	my_canvas = Canvas()
	
	# show words
	my_canvas.text(prompt, font_size = 30)
	if new:
		my_canvas.text(answer, y = 50, font_size = 25)
		my_canvas.text('Press Enter when you got it!', y = 300, x = 300, font_size = 20)
		
	# show canvas
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	on_time = False
	
	# Keep listening for key presses until the user presses Enter
	if not new:
		timing = clock.time() - trial_start_time
		#while True:
		while var.initial_time >= timing:
			key, time = my_keyboard.get_key(timeout=var.interval)
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				on_time = True
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
		
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(prompt, font_size = 30)
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
			timing = clock.time() - trial_start_time
			#my_canvas.text(timing, y = 200) debugging 
			#my_canvas.text(var.initial_time, y = 300) for debug
		
					
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
			#timing = clock.time() - trial_start_time
	else:
		while True:
			key, time = my_keyboard.get_key()
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				on_time = True
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
		
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(prompt, font_size = 30)
			my_canvas.text(answer, y = 50, font_size = 25)
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
			timing = clock.time() - trial_start_time
			#my_canvas.text(timing, y = 200) debugging 
			#my_canvas.text(var.initial_time, y = 300) for debug
		
					
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
			#timing = clock.time() - trial_start_time
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct, var.initial_time, keyboard_response, new, on_time, reaction_time, False)
	m.register_response(response) 
	
	# Show feedback
	if not new:
		feedback_color = "green" if correct else "red"
		if var.initial_time < timing:
			my_canvas.text("time has run out", y = 200, color = "red", font_size = 25)
		else:
			my_canvas.text(keyboard_response, y = 100, color = feedback_color, font_size = 25)
		if not correct:
			my_canvas.text(answer, y = 150, font_size = 25)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time >= var.session_duration:
		var.time_up = True
		
	# Increment trial number
	var.trial_num += 1
	__end__
	set _prepare ""

define inline_script no_time_bar_odd
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Get next fact from the model
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	prompt = next_fact.question
	answer = next_fact.answer
	
	activation = m.calculate_activation(trial_start_time, next_fact)
	reading_time = m.get_reading_time(prompt)
	reaction_time =	m.estimate_reaction_time_from_activation(activation, reading_time)
	
	# time in trial
	var.initial_time = 15000
	
	
	
	# Show prompt
	my_canvas = Canvas()
	
	# show words
	my_canvas.text(prompt, font_size = 30)
	if new:
		my_canvas.text(answer, y = 50, font_size = 25)
		my_canvas.text('Press Enter when you got it!', y = 300, x = 300, font_size = 20)
		
	# show canvas
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	on_time = False
	
	# Keep listening for key presses until the user presses Enter
	if not new:
		timing = clock.time() - trial_start_time
		#while True:
		while var.initial_time >= timing:
			key, time = my_keyboard.get_key(timeout=var.interval)
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				on_time = True
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
		
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(prompt, font_size = 30)
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
			timing = clock.time() - trial_start_time
			#my_canvas.text(timing, y = 200) debugging 
			#my_canvas.text(var.initial_time, y = 300) for debug
		
					
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
			#timing = clock.time() - trial_start_time
	else:
		while True:
			key, time = my_keyboard.get_key()
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				on_time = True
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
		
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(prompt, font_size = 30)
			my_canvas.text(answer, y = 50, font_size = 25)
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
			timing = clock.time() - trial_start_time
			#my_canvas.text(timing, y = 200) debugging 
			#my_canvas.text(var.initial_time, y = 300) for debug
		
					
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
			#timing = clock.time() - trial_start_time
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct, var.initial_time, keyboard_response, new, on_time, reaction_time, False)
	m.register_response(response) 
	
	# Show feedback
	if not new:
		feedback_color = "green" if correct else "red"
		if var.initial_time < timing:
			my_canvas.text("time has run out", y = 200, color = "red", font_size = 25)
		else:
			my_canvas.text(keyboard_response, y = 100, color = feedback_color, font_size = 25)
		if not correct:
			my_canvas.text(answer, y = 150, font_size = 25)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time >= var.session_duration/2:
		var.block1_time_up = True
		
	# Increment trial number
	var.trial_num += 1
	__end__
	set _prepare ""

define loop practice_loop
	set source table
	set repeat 2
	set order random
	set description "Voert herhaaldelijk een ander item uit"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 ignore_this_variable ""
	run practicesequence

define inline_script practice_script
	set description "Voert Python-code uit"
	___run__
	trial_start_time = clock.time()
	#without model just as an example trial
	question_swahili = practice_word["swahili"].to_string(index=False)
	answer_swahili = practice_word['english'].to_string(index=False)
	
	
	# Show prompt
	my_canvas = Canvas()
	
	# show words
	my_canvas.text(question_swahili, font_size = 30)
	if new:
		my_canvas.text(answer_swahili, y = 50, font_size = 25)
		my_canvas.text('Press Enter when you got it!', y = 300, x = 300, font_size = 20)
		
	# show canvas
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	if new == False:
		timing = clock.time() - trial_start_time
		#while True:
		while 15000 >= timing:
			key, time = my_keyboard.get_key()
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
		
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(question_swahili, font_size = 30)
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
	        #timing = clock.time() - trial_start_time
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
	
	else:
		while True:
			key, time = my_keyboard.get_key()
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
		
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(question_swahili, font_size = 30)
			my_canvas.text(answer_swahili, y = 50, font_size = 25)
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
			#my_canvas.text(timing, y = 200) debugging 
			#my_canvas.text(var.initial_time, y = 300) for debug
		
					
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
			#timing = clock.time() - trial_start_time
	
	# Check if the response is correct
	correct = keyboard_response == answer_swahili
	
	# Show feedback
	if new == False:
		feedback_color = "green" if correct else "red"
		if 15000 < timing:
			my_canvas.text("time has run out", y = 200, color = "red", font_size = 25)
		else:
			my_canvas.text(keyboard_response, y = 100, color = feedback_color, font_size = 25)
		if not correct:
			my_canvas.text(answer_swahili, y = 150, font_size = 25)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(1500)
	
	var.new = False
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(800)
	__end__
	set _prepare ""

define sketchpad practice_trial
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="You will first get a practice trial.<br /><br />Please press <b> Enter </b> after typing the translation.<br /><br />" x=0 y=0 z_index=0

define sequence practicesequence
	set flush_keyboard yes
	set description "Voert een aantal items achter elkaar uit"
	run practice_script True

define inline_script progress_bar
	set description "Executes Python code"
	set _run ""
	___prepare__
	import threading
	from time import sleep
	__end__

define inline_script save_firstblock
	set description "Executes Python code"
	___run__
	# Write the SlimStampen data to the OpenSesame log file
	dat = m.export_data()
	log.write(dat)
	__end__
	set _prepare ""

define inline_script save_secondblock
	set description "Executes Python code"
	___run__
	# Write the SlimStampen data to the OpenSesame log file
	dat = m.export_data()
	log.write(dat)
	__end__
	set _prepare ""

define inline_script slimstampen_setup
	set description "Executes Python code"
	___run__
	import pandas as pd
	
	m = SpacingModel()
	
	words = pd.read_csv(pool['swahili_words.csv'], sep=" ")
	
		
	even_words = words.head(-1) # 74 words instead of 75
	practice_word = words[-1:]
	
	print(words, even_words, practice_word, practice_word["swahili"].to_string(index=False)) # check check
	
	# random_state for reproducability
	first_set = even_words.sample(frac=0.5,random_state=subject_nr) # set to part nr
	
	for idx, row in first_set.iterrows():
		m.add_fact(Fact(idx, row["swahili"], row["english"]))
	
	second_set = pd.concat([even_words,first_set]).drop_duplicates(keep=False)
	second_set = second_set.sample(frac=1, random_state=subject_nr)
	
	new = True
	
	#print(first_set, second_set)
	# # Add some study facts to the model (you could also read them from a CSV file)
	# facts = [Fact(1, "hello", "bonjour"),
	# 		Fact(2, "dog", "chien"),
	# 		Fact(3, "cat", "chat"),
	# 		Fact(4, "computer", "ordinateur"),
	# 		Fact(5, "house", "maison"),
	# 		Fact(6, "car", "voiture"),
	# 		Fact(7, "fish", "poisson"),
	# 		Fact(8, "bottle", "bouteille")]
	
	# for fact in facts:
	# 	m.add_fact(fact)
	__end__
	___prepare__
	from __future__ import division
	import math
	import pandas as pd
	from collections import namedtuple
	
	
	Fact = namedtuple("Fact", "fact_id, question, answer")
	Response = namedtuple("Response", "fact, start_time, rt, correct, time_bar, keyboard_response, new, on_time, expected_rt, time_bar_visible")
	Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	class SpacingModel(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """
	        # Calculate all fact activations in the near future
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	        # Prevent an immediate repetition of the same fact
	        if len(seen_facts) > 2:
	            last_response = self.responses[-1]
	            seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	        # Reinforce the weakest fact with an activation below the threshold
	        seen_facts_below_threshold = [(f, a) for (f, a) in seen_facts if a < self.FORGET_THRESHOLD]
	        if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	            weakest_fact = min(seen_facts, key = lambda t: t[1])
	            return((weakest_fact[0], False))
	
	        # If none of the previously seen facts has an activation below the threshold, return a new fact
	        return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 3:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        reading_time = self.get_reading_time(response.fact.question)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	        reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        word_count = len(text.split())
	
	        if word_count > 1:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        def calc_rof(row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        dat["alpha"] = dat.apply(calc_rof, axis = 1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	__end__

define inline_script time_bar_odd
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Get next fact from the model
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	prompt = next_fact.question
	answer = next_fact.answer
	
	activation = m.calculate_activation(trial_start_time, next_fact)
	reading_time = m.get_reading_time(prompt)
	reaction_time =	m.estimate_reaction_time_from_activation(activation, reading_time)
		
	if not new:
		#where we think 200 cpm is avg so 3,33 per s.
		typespeed = len(answer) * 333
		var.initial_time = (reaction_time * 2) + typespeed
	else:
		var.initial_time = 15000
	
	
	# Show prompt
	my_canvas = Canvas()
	
	# the size and position of the time bar
	if var.timebar and not new:
		x, y, width, height = -200, -200, 400, 40
		my_canvas["myRect"] = Rect(x - 1, y - 1, width + 2, height + 2, fill=False, color = "black") 
	
	# show words
	my_canvas.text(prompt, font_size = 30)
	if new:
		my_canvas.text(answer, y = 50, font_size = 25)
		my_canvas.text('Press Enter when you got it!', y = 300, x = 300, font_size = 20)
		
	# show canvas
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	on_time = False
	
	# Keep listening for key presses until the user presses Enter
	#while time for word has not ran out yet:
	if not new:
		timing = clock.time() - trial_start_time
		while var.initial_time >= timing:
			key, time = my_keyboard.get_key(timeout=var.interval)
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				on_time = True
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
			#elif not key:
			#	'timeoout'
			#	pass
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(prompt, font_size = 30)
	
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
			
			timing = clock.time() - trial_start_time
			#my_canvas.text(timing, y = 200) debugging 
			#my_canvas.text(var.initial_time, y = 300) for debug
			if var.initial_time >= timing:
				# update the timebar
				if var.timebar:
					# print(clock.time(), trial_start_time, width_inner)
					# my_canvas, x, y, width, height, time
					my_canvas["myRect"] = Rect(x - 1, y - 1, width + 2, height + 2, fill=False, color = [0, 0, 0])    
					w = (var.initial_time - (clock.time() - trial_start_time)) / var.initial_time
					width_inner = round(w * width)
					my_canvas['my_rect'] = Rect(x, y, width_inner, height, fill=True, color = [round((1 - w) * 255), round(w * 255), 0])
			else:
				# update the timebar
				if var.timebar:
					# print(clock.time(), trial_start_time, width_inner)
					# my_canvas, x, y, width, height, time
					my_canvas["myRect"] = Rect(x - 1, y - 1, width + 2, height + 2, fill=False, color = "black")    
					
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
			#timing = clock.time() - trial_start_time
	else:
		while True:
			key, time = my_keyboard.get_key()
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				on_time = True
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(prompt, font_size = 30)
			my_canvas.text(answer, y = 50, font_size = 25)
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
	 
					
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
	
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct, var.initial_time, keyboard_response, new, on_time, reaction_time, True)
	m.register_response(response) 
	
	# Show feedback
	if not new:
		feedback_color = "green" if correct else "red"
		if var.initial_time < timing:
			my_canvas.text("time has run out", y = 200, color = "red", font_size = 25)
		else:
			my_canvas.text(keyboard_response, y = 100, color = feedback_color, font_size = 25)
		if not correct:
			my_canvas.text(answer, y = 150, font_size = 25)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time >= var.session_duration:
		var.time_up = True
		
	# Increment trial number
	var.trial_num += 1
	
	
	#print(clock.time() - var.session_start_time, "\n\nHELLO")
	#print(var.trial_num, var.time_up)
	__end__
	___prepare__
	def draw_progress_bar(my_canvas):
	    # time in s
	    x, y, width, height, time = -200, -200, 400, 40, 15
	    # my_canvas, x, y, width, height, time
	    my_canvas["myRect"] = Rect(x - 1, y - 1, width + 2, height + 2, fill=False, color = "black")    
	    for i in range(time)[::-1]:
	        width_inner = round((i/time) * width)
	        print(width_inner)
	        my_canvas['my_rect'] = Rect(x, y, width_inner, height, fill=True, color = "red")
	        my_canvas.prepare()
	        my_canvas.show()
	        sleep(0.1)
	        del my_canvas['my_rect']
	__end__

define inline_script time_bar_subeven
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Get next fact from the model
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	prompt = next_fact.question
	answer = next_fact.answer
	
	activation = m.calculate_activation(trial_start_time, next_fact)
	reading_time = m.get_reading_time(prompt)
	reaction_time =	m.estimate_reaction_time_from_activation(activation, reading_time)
		
	if not new:
		#where we think 200 cpm is avg so 3,33 per s.
		typespeed = len(answer) * 333
		var.initial_time = (reaction_time * 2) + typespeed
	else:
		var.initial_time = 15000
	
	# Show prompt
	my_canvas = Canvas()
	
	# the size and position of the time bar
	if var.timebar and not new:
		x, y, width, height = -200, -200, 400, 40
		my_canvas["myRect"] = Rect(x - 1, y - 1, width + 2, height + 2, fill=False, color = "black") 
	
	# show words
	my_canvas.text(prompt, font_size = 30)
	if new:
		my_canvas.text(answer, y = 50, font_size = 25)
		my_canvas.text('Press Enter when you got it!', y = 300, x = 300, font_size = 20)
	# show canvas
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	on_time = False
	
	# Keep listening for key presses until the user presses Enter
	#while time for word has not ran out yet:
	if not new:
		timing = clock.time() - trial_start_time
		while var.initial_time >= timing:
			key, time = my_keyboard.get_key(timeout=var.interval)
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				on_time = True
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
			#elif not key:
			#	'timeoout'
			#	pass
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(prompt, font_size = 30)
	
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
			
			timing = clock.time() - trial_start_time
			#my_canvas.text(timing, y = 200) debugging 
			#my_canvas.text(var.initial_time, y = 300) for debug
			if var.initial_time >= timing:
				# update the timebar
				if var.timebar:
					# print(clock.time(), trial_start_time, width_inner)
					# my_canvas, x, y, width, height, time
					my_canvas["myRect"] = Rect(x - 1, y - 1, width + 2, height + 2, fill=False, color = [0, 0, 0])    
					w = (var.initial_time - (clock.time() - trial_start_time)) / var.initial_time
					width_inner = round(w * width)
					my_canvas['my_rect'] = Rect(x, y, width_inner, height, fill=True, color = [round((1 - w) * 255), round(w * 255), 0])
			else:
				# update the timebar
				if var.timebar:
					# print(clock.time(), trial_start_time, width_inner)
					# my_canvas, x, y, width, height, time
					my_canvas["myRect"] = Rect(x - 1, y - 1, width + 2, height + 2, fill=False, color = "black")    
					
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
			#timing = clock.time() - trial_start_time
	else:
		while True:
			key, time = my_keyboard.get_key()
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				on_time = True
				break
				
			if key == "backspace":
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
				
			elif key == None:
				pass
			
			else:
				keyboard_response += key
		
			# Update what's on screen'
			my_canvas.clear()
			my_canvas.text(prompt, font_size = 30)
			my_canvas.text(answer, y = 50, font_size = 25)
			my_canvas.text(keyboard_response, y = 100, font_size = 25)
	 
					
			# update the canvas
			my_canvas.prepare()
			my_canvas.show()
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct, var.initial_time, keyboard_response, new, on_time, reaction_time, True)
	m.register_response(response) 
	
	# Show feedback
	if not new:
		feedback_color = "green" if correct else "red"
		if var.initial_time < timing:
			my_canvas.text("time has run out", y = 200, color = "red", font_size = 25)
		else:
			my_canvas.text(keyboard_response, y = 100, color = feedback_color, font_size = 25)
		if not correct:
			my_canvas.text(answer, y = 150, font_size = 25)
		
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time >= var.session_duration/2:
		var.block1_time_up = True
		
	# Increment trial number
	var.trial_num += 1
	
	
	#print(clock.time() - var.session_start_time, "\n\nHELLO")
	#print(var.trial_num, var.time_up)
	__end__
	set _prepare ""

define inline_script trial_no_time
	set description "Voert Python-code uit"
	set _run ""
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run time_bar_subeven "[subject_parity] = even"
	run no_time_bar_odd "[subject_parity] = odd"

define sequence trial_sequence2
	set flush_keyboard yes
	set description "Voert een aantal items achter elkaar uit"
	run time_bar_odd "[subject_parity] = odd"
	run no_time_bar_even "[subject_parity] = even"

